PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SEAL_LandmarkLocation_Sess2
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent image
      image = Resources/Kemper Main.png
      size = (0.8, 0.9)
      startVal [time (s)] = 0.0
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    PolygonComponent L1_shape
      fillColor = black
      opacity = 0
      pos = (-.09, -.1)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent L2_shape
      fillColor = black
      opacity = 0
      pos = (0.35, 0.20)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent L3_shape
      fillColor = black
      opacity = 0
      pos = (0.18, 0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent L4_shape
      fillColor = black
      opacity = 0
      pos = (0.09, 0.27)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent L5_shape
      fillColor = black
      opacity = 0
      pos = (-.08, -.25)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent L6_shape
      fillColor = black
      opacity = 0
      pos = (-0.25, -.08)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent L7_shape
      fillColor = black
      opacity = 0
      pos = (0.1, 0.34)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent L8_shape
      fillColor = black
      opacity = 0
      pos = (0.3, 0.32)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent L9_shape
      fillColor = black
      opacity = 0
      pos = (0.19, 0.2)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent L10_shape
      fillColor = black
      opacity = 0
      pos = (-0.16, -0.05)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent L11_shape
      fillColor = black
      opacity = 0
      pos = (-0.01, 0.36)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent L12_shape
      fillColor = black
      opacity = 0
      pos = (0.21, 0.13)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent Instruction_text
      letterHeight = 0.02
      pos = (0, 0.48)
      startVal [time (s)] = 0.0
      text = Click and drag each landmark to the correct location on the map. Even if you do not know the correct location, take your best guess.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.02
      pos = (0, -.47)
      startVal [time (s)] = 0.0
      text = Press SPACEBAR when you are done to continue
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    ImageComponent L1
      image = Resources/Landmark_1.JPG
      pos = (-0.7, 0.2)
      size = (0.085, 0.085)
      startVal [time (s)] = 0.0
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    ImageComponent L2
      image = Resources/Landmark_2.JPG
      pos = (-0.5, 0.2)
      size = (0.085, 0.085)
      startVal [time (s)] = 0.0
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    ImageComponent L3
      image = Resources/Landmark_3.jpg
      pos = (-0.7, 0)
      size = (0.085, 0.085)
      startVal [time (s)] = 0.0
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    ImageComponent L4
      image = Resources/Landmark_4.JPG
      pos = (-0.5, 0)
      size = (0.085, 0.085)
      startVal [time (s)] = 0.0
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    ImageComponent L5
      image = Resources/Landmark_5.JPG
      pos = (-0.7, -.2)
      size = (0.085, 0.085)
      startVal [time (s)] = 0.0
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    ImageComponent L6
      image = Resources/Landmark_6.JPG
      pos = (-0.5, -.2)
      size = (0.085, 0.085)
      startVal [time (s)] = 0.0
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    ImageComponent L7
      image = Resources/Landmark_7.JPG
      pos = (0.5, 0.2)
      size = (0.085, 0.085)
      startVal [time (s)] = 0.0
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    ImageComponent L8
      image = Resources/Landmark_8.JPG
      pos = (0.7, 0.2)
      size = (0.085, 0.085)
      startVal [time (s)] = 0.0
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    ImageComponent L9
      image = Resources/Landmark_9.JPG
      pos = (0.5, 0)
      size = (0.085, 0.085)
      startVal [time (s)] = 0.0
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    ImageComponent L10
      image = Resources/Landmark_10.JPG
      pos = (0.7, 0)
      size = (0.085, 0.085)
      startVal [time (s)] = 0.0
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    ImageComponent L11
      image = Resources/Landmark_11.JPG
      pos = (0.5, -0.2)
      size = (0.085, 0.085)
      startVal [time (s)] = 0.0
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    ImageComponent L12
      image = Resources/Landmark_12.JPG
      pos = (0.7, -0.2)
      size = (0.085, 0.085)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        L1_opacity = 0.5
        L2_opacity = 0.5
        L3_opacity = 0.5
        L4_opacity = 0.5
        L5_opacity = 0.5
        L6_opacity = 0.5
        L7_opacity = 0.5
        L8_opacity = 0.5
        L9_opacity = 0.5
        L10_opacity = 0.5
        L11_opacity = 0.5
        L12_opacity = 0.5

        def movePicked(picked, mouse, grabbed):
            if grabbed is not None and mouse.isPressedIn(grabbed):
                grabbed.pos = mouse.getPos()
                return grabbed
            else:
                for piece in picked:
                    if mouse.isPressedIn(piece) and grabbed is None:
                        return piece
      Begin Routine:
        picked = []
        movingPiece = None

        pieces = [L1, L2, L3, L4, L5, L6, L7, L8, L9, L10, L11, L12]

        score = 0
      Each Frame:
        for piece in pieces:
            if mouse.isPressedIn(piece) and movingPiece is None:
                picked.append(piece)

        movingPiece = movePicked(picked, mouse, movingPiece)
      End Routine:
        L1FinalLoc = L1.pos
        L2FinalLoc = L2.pos
        L3FinalLoc = L3.pos
        L4FinalLoc = L4.pos
        L5FinalLoc = L5.pos
        L6FinalLoc = L6.pos
        L7FinalLoc = L7.pos
        L8FinalLoc = L8.pos
        L9FinalLoc = L9.pos
        L10FinalLoc = L10.pos
        L11FinalLoc = L11.pos
        L12FinalLoc = L12.pos

        if L1_shape.contains(L1FinalLoc):
            L1_corr = 2
            L1_opacity = 1
            score += 2
        elif L1_shape.contains(L2FinalLoc):
            L1_corr = 1
            score += 1
        elif L1_shape.contains(L3FinalLoc):
            L1_corr = 1
            score += 1
        elif L1_shape.contains(L4FinalLoc):
            L1_corr = 1
            score += 1
        elif L1_shape.contains(L5FinalLoc):
            L1_corr = 1
            score += 1
        elif L1_shape.contains(L6FinalLoc):
            L1_corr = 1
            score += 1
        elif L1_shape.contains(L7FinalLoc):
            L1_corr = 1
            score += 1
        elif L1_shape.contains(L8FinalLoc):
            L1_corr = 1
            score += 1
        elif L1_shape.contains(L9FinalLoc):
            L1_corr = 1
            score += 1
        elif L1_shape.contains(L10FinalLoc):
            L1_corr = 1
            score += 1
        elif L1_shape.contains(L11FinalLoc):
            L1_corr = 1
            score += 1
        elif L1_shape.contains(L12FinalLoc):
            L1_corr = 1
            score += 1
        else:
            L1_corr = 0
            L1_opacity = 0

        thisExp.addData('L1_loc', L1FinalLoc)
        thisExp.addData('L1_corr', L1_corr)

        if L2_shape.contains(L2FinalLoc):
            L2_corr = 2
            L2_opacity = 1
            score += 2
        elif L2_shape.contains(L1FinalLoc):
            L2_corr = 1
            score += 1
        elif L2_shape.contains(L3FinalLoc):
            L2_corr = 1
            score += 1
        elif L2_shape.contains(L4FinalLoc):
            L2_corr = 1
            score += 1
        elif L2_shape.contains(L5FinalLoc):
            L2_corr = 1
            score += 1
        elif L2_shape.contains(L6FinalLoc):
            L2_corr = 1
            score += 1
        elif L2_shape.contains(L7FinalLoc):
            L2_corr = 1
            score += 1
        elif L2_shape.contains(L8FinalLoc):
            L2_corr = 1
            score += 1
        elif L2_shape.contains(L9FinalLoc):
            L2_corr = 1
            score += 1
        elif L2_shape.contains(L10FinalLoc):
            L2_corr = 1
            score += 1
        elif L2_shape.contains(L11FinalLoc):
            L2_corr = 1
            score += 1
        elif L2_shape.contains(L12FinalLoc):
            L2_corr = 1
            score += 1
        else:
            L2_corr = 0
            L2_opacity = 0

        thisExp.addData('L2_loc', L2FinalLoc)
        thisExp.addData('L2_corr', L2_corr)

        if L3_shape.contains(L3FinalLoc):
            L3_corr = 2
            L3_opacity = 1
            score += 2
        elif L3_shape.contains(L1FinalLoc):
            L3_corr = 1
            score += 1
        elif L3_shape.contains(L2FinalLoc):
            L3_corr = 1
            score += 1
        elif L3_shape.contains(L4FinalLoc):
            L3_corr = 1
            score += 1
        elif L3_shape.contains(L5FinalLoc):
            L3_corr = 1
            score += 1
        elif L3_shape.contains(L6FinalLoc):
            L3_corr = 1
            score += 1
        elif L1_shape.contains(L7FinalLoc):
            L1_corr = 1
            score += 1
        elif L3_shape.contains(L8FinalLoc):
            L3_corr = 1
            score += 1
        elif L3_shape.contains(L9FinalLoc):
            L3_corr = 1
            score += 1
        elif L3_shape.contains(L10FinalLoc):
            L3_corr = 1
            score += 1
        elif L3_shape.contains(L11FinalLoc):
            L3_corr = 1
            score += 1
        elif L3_shape.contains(L12FinalLoc):
            L3_corr = 1
            score += 1
        else:
            L3_corr = 0
            L3_opacity = 0

        thisExp.addData('L3_loc', L3FinalLoc)
        thisExp.addData('L3_corr', L3_corr)

        if L4_shape.contains(L4FinalLoc):
            L4_corr = 2
            L4_opacity = 1
            score += 2
        elif L4_shape.contains(L2FinalLoc):
            L4_corr = 1
            score += 1
        elif L4_shape.contains(L3FinalLoc):
            L4_corr = 1
            score += 1
        elif L4_shape.contains(L1FinalLoc):
            L4_corr = 1
            score += 1
        elif L4_shape.contains(L5FinalLoc):
            L4_corr = 1
            score += 1
        elif L4_shape.contains(L6FinalLoc):
            L4_corr = 1
            score += 1
        elif L4_shape.contains(L7FinalLoc):
            L4_corr = 1
            score += 1
        elif L4_shape.contains(L8FinalLoc):
            L4_corr = 1
            score += 1
        elif L4_shape.contains(L9FinalLoc):
            L4_corr = 1
            score += 1
        elif L4_shape.contains(L10FinalLoc):
            L4_corr = 1
            score += 1
        elif L4_shape.contains(L11FinalLoc):
            L4_corr = 1
            score += 1
        elif L4_shape.contains(L12FinalLoc):
            L4_corr = 1
            score += 1
        else:
            L4_corr = 0
            L4_opacity = 0

        thisExp.addData('L4_loc', L4FinalLoc)
        thisExp.addData('L4_corr', L4_corr)

        if L5_shape.contains(L5FinalLoc):
            L5_corr = 2
            L5_opacity = 1
            score += 2
        elif L5_shape.contains(L2FinalLoc):
            L5_corr = 1
            score += 1
        elif L5_shape.contains(L3FinalLoc):
            L5_corr = 1
            score += 1
        elif L5_shape.contains(L4FinalLoc):
            L5_corr = 1
            score += 1
        elif L5_shape.contains(L1FinalLoc):
            L5_corr = 1
            score += 1
        elif L5_shape.contains(L6FinalLoc):
            L5_corr = 1
            score += 1
        elif L5_shape.contains(L7FinalLoc):
            L5_corr = 1
            score += 1
        elif L5_shape.contains(L8FinalLoc):
            L5_corr = 1
            score += 1
        elif L5_shape.contains(L9FinalLoc):
            L5_corr = 1
            score += 1
        elif L5_shape.contains(L10FinalLoc):
            L5_corr = 1
            score += 1
        elif L5_shape.contains(L11FinalLoc):
            L5_corr = 1
            score += 1
        elif L5_shape.contains(L12FinalLoc):
            L5_corr = 1
            score += 1
        else:
            L5_corr = 0
            L5_opacity = 0

        thisExp.addData('L5_loc', L5FinalLoc)
        thisExp.addData('L5_corr', L5_corr)

        if L6_shape.contains(L6FinalLoc):
            L6_corr = 2
            L6_opacity = 1
            score += 2
        elif L6_shape.contains(L2FinalLoc):
            L6_corr = 1
            score += 1
        elif L6_shape.contains(L3FinalLoc):
            L6_corr = 1
            score += 1
        elif L6_shape.contains(L4FinalLoc):
            L6_corr = 1
            score += 1
        elif L6_shape.contains(L5FinalLoc):
            L6_corr = 1
            score += 1
        elif L6_shape.contains(L1FinalLoc):
            L6_corr = 1
            score += 1
        elif L6_shape.contains(L7FinalLoc):
            L6_corr = 1
            score += 1
        elif L6_shape.contains(L8FinalLoc):
            L6_corr = 1
            score += 1
        elif L1_shape.contains(L9FinalLoc):
            L1_corr = 1
            score += 1
        elif L6_shape.contains(L10FinalLoc):
            L6_corr = 1
            score += 1
        elif L6_shape.contains(L11FinalLoc):
            L6_corr = 1
            score += 1
        elif L6_shape.contains(L12FinalLoc):
            L6_corr = 1
            score += 1
        else:
            L6_corr = 0
            L6_opacity = 0

        thisExp.addData('L6_loc', L6FinalLoc)
        thisExp.addData('L6_corr', L6_corr)

        if L7_shape.contains(L7FinalLoc):
            L7_corr = 2
            L7_opacity = 1
            score += 2
        elif L7_shape.contains(L2FinalLoc):
            L7_corr = 1
            score += 1
        elif L7_shape.contains(L3FinalLoc):
            L7_corr = 1
            score += 1
        elif L7_shape.contains(L4FinalLoc):
            L7_corr = 1
            score += 1
        elif L7_shape.contains(L5FinalLoc):
            L7_corr = 1
            score += 1
        elif L7_shape.contains(L6FinalLoc):
            L7_corr = 1
            score += 1
        elif L7_shape.contains(L1FinalLoc):
            L7_corr = 1
            score += 1
        elif L7_shape.contains(L8FinalLoc):
            L7_corr = 1
            score += 1
        elif L7_shape.contains(L9FinalLoc):
            L7_corr = 1
            score += 1
        elif L7_shape.contains(L10FinalLoc):
            L7_corr = 1
            score += 1
        elif L7_shape.contains(L11FinalLoc):
            L7_corr = 1
            score += 1
        elif L7_shape.contains(L12FinalLoc):
            L7_corr = 1
            score += 1
        else:
            L7_corr = 0
            L7_opacity = 0

        thisExp.addData('L7_loc', L7FinalLoc)
        thisExp.addData('L7_corr', L7_corr)

        if L8_shape.contains(L8FinalLoc):
            L8_corr = 2
            L8_opacity = 1
            score += 2
        elif L8_shape.contains(L2FinalLoc):
            L8_corr = 1
            score += 1
        elif L8_shape.contains(L3FinalLoc):
            L8_corr = 1
            score += 1
        elif L8_shape.contains(L4FinalLoc):
            L8_corr = 1
            score += 1
        elif L8_shape.contains(L5FinalLoc):
            L8_corr = 1
            score += 1
        elif L8_shape.contains(L6FinalLoc):
            L8_corr = 1
            score += 1
        elif L8_shape.contains(L7FinalLoc):
            L8_corr = 1
            score += 1
        elif L8_shape.contains(L1FinalLoc):
            L8_corr = 1
            score += 1
        elif L8_shape.contains(L9FinalLoc):
            L8_corr = 1
            score += 1
        elif L8_shape.contains(L10FinalLoc):
            L8_corr = 1
            score += 1
        elif L8_shape.contains(L11FinalLoc):
            L8_corr = 1
            score += 1
        elif L8_shape.contains(L12FinalLoc):
            L8_corr = 1
            score += 1
        else:
            L8_corr = 0
            L8_opacity = 0

        thisExp.addData('L8_loc', L8FinalLoc)
        thisExp.addData('L8_corr', L8_corr)

        if L9_shape.contains(L9FinalLoc):
            L9_corr = 2
            L9_opacity = 1
            score += 2
        elif L9_shape.contains(L2FinalLoc):
            L9_corr = 1
            score += 1
        elif L9_shape.contains(L3FinalLoc):
            L9_corr = 1
            score += 1
        elif L9_shape.contains(L4FinalLoc):
            L9_corr = 1
            score += 1
        elif L9_shape.contains(L5FinalLoc):
            L9_corr = 1
            score += 1
        elif L9_shape.contains(L6FinalLoc):
            L9_corr = 1
            score += 1
        elif L9_shape.contains(L7FinalLoc):
            L9_corr = 1
            score += 1
        elif L9_shape.contains(L8FinalLoc):
            L9_corr = 1
            score += 1
        elif L9_shape.contains(L1FinalLoc):
            L9_corr = 1
            score += 1
        elif L9_shape.contains(L10FinalLoc):
            L9_corr = 1
            score += 1
        elif L9_shape.contains(L11FinalLoc):
            L9_corr = 1
            score += 1
        elif L9_shape.contains(L12FinalLoc):
            L9_corr = 1
            score += 1
        else:
            L9_corr = 0
            L9_opacity = 0

        thisExp.addData('L9_loc', L9FinalLoc)
        thisExp.addData('L9_corr', L9_corr)

        if L10_shape.contains(L10FinalLoc):
            L10_corr = 2
            L10_opacity = 1
            score += 2
        elif L10_shape.contains(L2FinalLoc):
            L10_corr = 1
            score += 1
        elif L10_shape.contains(L3FinalLoc):
            L10_corr = 1
            score += 1
        elif L10_shape.contains(L4FinalLoc):
            L10_corr = 1
            score += 1
        elif L10_shape.contains(L5FinalLoc):
            L10_corr = 1
            score += 1
        elif L10_shape.contains(L6FinalLoc):
            L10_corr = 1
            score += 1
        elif L10_shape.contains(L7FinalLoc):
            L10_corr = 1
            score += 1
        elif L10_shape.contains(L8FinalLoc):
            L10_corr = 1
            score += 1
        elif L10_shape.contains(L9FinalLoc):
            L10_corr = 1
            score += 1
        elif L10_shape.contains(L1FinalLoc):
            L10_corr = 1
            score += 1
        elif L10_shape.contains(L11FinalLoc):
            L10_corr = 1
            score += 1
        elif L10_shape.contains(L12FinalLoc):
            L10_corr = 1
            score += 1
        else:
            L10_corr = 0
            L10_opacity = 0

        thisExp.addData('L10_loc', L10FinalLoc)
        thisExp.addData('L10_corr', L10_corr)

        if L11_shape.contains(L11FinalLoc):
            L11_corr = 2
            L11_opacity = 1
            score += 2
        elif L11_shape.contains(L2FinalLoc):
            L11_corr = 1
            score += 1
        elif L11_shape.contains(L3FinalLoc):
            L11_corr = 1
            score += 1
        elif L11_shape.contains(L4FinalLoc):
            L11_corr = 1
            score += 1
        elif L11_shape.contains(L5FinalLoc):
            L11_corr = 1
            score += 1
        elif L11_shape.contains(L6FinalLoc):
            L11_corr = 1
            score += 1
        elif L11_shape.contains(L7FinalLoc):
            L11_corr = 1
            score += 1
        elif L11_shape.contains(L8FinalLoc):
            L11_corr = 1
            score += 1
        elif L11_shape.contains(L9FinalLoc):
            L1_corr = 1
            score += 1
        elif L11_shape.contains(L10FinalLoc):
            L11_corr = 1
            score += 1
        elif L11_shape.contains(L1FinalLoc):
            L11_corr = 1
            score += 1
        elif L11_shape.contains(L12FinalLoc):
            L11_corr = 1
            score += 1
        else:
            L11_corr = 0
            L11_opacity = 0

        thisExp.addData('L11_loc', L11FinalLoc)
        thisExp.addData('L11_corr', L11_corr)

        if L12_shape.contains(L12FinalLoc):
            L12_corr = 2
            L12_opacity = 1
            score += 2
        elif L12_shape.contains(L2FinalLoc):
            L12_corr = 1
            score += 1
        elif L12_shape.contains(L3FinalLoc):
            L12_corr = 1
            score += 1
        elif L12_shape.contains(L4FinalLoc):
            L12_corr = 1
            score += 1
        elif L12_shape.contains(L5FinalLoc):
            L12_corr = 1
            score += 1
        elif L12_shape.contains(L6FinalLoc):
            L12_corr = 1
            score += 1
        elif L12_shape.contains(L7FinalLoc):
            L12_corr = 1
            score += 1
        elif L12_shape.contains(L8FinalLoc):
            L12_corr = 1
            score += 1
        elif L12_shape.contains(L9FinalLoc):
            L12_corr = 1
            score += 1
        elif L12_shape.contains(L10FinalLoc):
            L12_corr = 1
            score += 1
        elif L12_shape.contains(L11FinalLoc):
            L12_corr = 1
            score += 1
        elif L12_shape.contains(L1FinalLoc):
            L12_corr = 1
            score += 1
        else:
            L12_corr = 0
            L12_opacity = 0

        thisExp.addData('L12_loc', L12FinalLoc)
        thisExp.addData('L12_corr', L12_corr)
  Routine Welcome
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Welcome to the SEAL Landmark Location Memory - Landmark Location Association Memory Task
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  Routine Instruction
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you will be presented with a map of the Kemper Museum and the following Landmarks. You are task with dragging the Landmarks to the correct location on the map.

        Press SPACEBAR to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Thank you for participating in the Landmark Location Memory - Landmark Location Association Memory Task. 
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Flow
  Routine Welcome
  Routine Instruction
  Routine trial
  Routine End
